PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'Jelige': '', 'Születési évszám': ''}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['resources/1green.JPG', 'resources/1red.JPG', 'resources/nsym1.JPG', 'resources/nsym2.JPG', 'resources/nsym3.JPG', 'resources/nsym4.JPG', 'resources/nsym5.JPG', 'resources/nsym6.JPG', 'resources/nsym7.JPG', 'resources/nsym8.JPG', 'resources/nsym9.JPG', 'resources/nsym10.JPG', 'resources/nsym11.JPG', 'resources/nsym12.JPG', 'resources/nsym13.JPG', 'resources/nsym14.JPG', 'resources/nsym15.JPG', 'resources/nsym16.JPG', 'resources/nsym17.JPG', 'resources/nsym18.JPG', 'resources/nsym19.JPG', 'resources/nsym20.JPG', 'resources/nsym21.JPG', 'resources/nsym22.JPG', 'resources/nsym23.JPG', 'resources/nsym24.JPG', 'resources/nsym25.JPG', 'resources/nsym26.JPG', 'resources/nsym27.JPG', 'resources/nsym28.JPG', 'resources/nsym29.JPG', 'resources/nsym30.JPG', 'resources/nsym31.JPG', 'resources/nsym32.JPG', 'resources/nsym33.JPG', 'resources/nsym34.JPG', 'resources/nsym35.JPG', 'resources/nsym36.JPG', 'resources/nsym37.JPG', 'resources/nsym38.JPG', 'resources/nsym39.JPG', 'resources/nsym40.JPG', 'resources/nsym41.JPG', 'resources/nsym42.JPG', 'resources/nsym43.JPG', 'resources/nsym44.JPG', 'resources/nsym45.JPG', 'resources/nsym46.JPG', 'resources/nsym47.JPG', 'resources/nsym48.JPG', 'resources/nsym49.JPG', 'resources/nsym50.JPG', 'resources/nsym51.JPG', 'resources/nsym52.JPG', 'resources/nsym53.JPG', 'resources/nsym54.JPG', 'resources/nsym55.JPG', 'resources/nsym56.JPG', 'resources/nsym57.JPG', 'resources/nsym58.JPG', 'resources/nsym59.JPG', 'resources/nsym60.JPG', 'resources/nsym61.JPG', 'resources/nsym62.JPG', 'resources/nsym63.JPG', 'resources/nsym64.JPG', 'resources/nsym65.JPG', 'resources/nsym66.JPG', 'resources/nsym67.JPG', 'resources/nsym68.JPG', 'resources/nsym69.JPG', 'resources/nsym70.JPG', 'resources/nsym71.JPG', 'resources/nsym72.JPG', 'resources/nsym73.JPG', 'resources/nsym74.JPG', 'resources/nsym75.JPG', 'resources/nsym76.JPG', 'resources/nsym77.JPG', 'resources/nsym78.JPG', 'resources/nsym79.JPG', 'resources/nsym80.JPG', 'resources/sym1.JPG', 'resources/sym2.JPG', 'resources/sym3.JPG', 'resources/sym4.JPG', 'resources/sym5.JPG', 'resources/sym6.JPG', 'resources/sym7.JPG', 'resources/sym8.JPG', 'resources/sym9.JPG', 'resources/sym10.JPG', 'resources/sym11.JPG', 'resources/sym12.JPG', 'resources/sym13.JPG', 'resources/sym14.JPG', 'resources/sym15.JPG', 'resources/sym16.JPG', 'resources/sym17.JPG', 'resources/sym18.JPG', 'resources/sym19.JPG', 'resources/sym20.JPG', 'resources/sym21.JPG', 'resources/sym22.JPG', 'resources/sym23.JPG', 'resources/sym24.JPG', 'resources/sym25.JPG', 'resources/sym26.JPG', 'resources/sym27.JPG', 'resources/sym28.JPG', 'resources/sym29.JPG', 'resources/sym30.JPG', 'resources/sym31.JPG', 'resources/sym32.JPG', 'resources/sym33.JPG', 'resources/sym34.JPG', 'resources/sym35.JPG', 'resources/sym36.JPG', 'resources/sym37.JPG', 'resources/sym38.JPG', 'resources/sym39.JPG', 'resources/sym40.JPG', 'resources/sym41.JPG', 'resources/sym42.JPG', 'resources/sym43.JPG', 'resources/sym44.JPG', 'resources/sym45.JPG', 'resources/sym46.JPG', 'resources/sym47.JPG', 'resources/sym48.JPG', 'resources/sym49.JPG', 'resources/sym50.JPG', 'resources/sym51.JPG', 'resources/sym52.JPG', 'resources/sym53.JPG', 'resources/sym54.JPG', 'resources/sym55.JPG', 'resources/sym56.JPG', 'resources/sym57.JPG', 'resources/sym58.JPG', 'resources/sym59.JPG', 'resources/sym60.JPG', 'resources/sym61.JPG', 'resources/sym62.JPG', 'resources/sym63.JPG', 'resources/sym64.JPG', 'resources/sym65.JPG', 'resources/sym66.JPG', 'resources/sym67.JPG', 'resources/sym68.JPG', 'resources/sym69.JPG', 'resources/sym70.JPG', 'resources/sym71.JPG', 'resources/sym72.JPG', 'resources/sym73.JPG', 'resources/sym74.JPG', 'resources/sym75.JPG', 'resources/sym76.JPG', 'resources/sym77.JPG', 'resources/sym78.JPG', 'resources/sym79.JPG', 'resources/sym80.JPG']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Symmetry_Span_1
  keyboardBackend = ioHub
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Routines
  Routine wlc
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Most egy emlékezeti feladat következik.

        A feladat során egy piros négyzet jelenik majd meg viszonylag rövid időre egy négyzetrács véletlenszerű mezőjében, majd ez néhányszor megismétlődik.
        Kérlek, jegyezd meg a megjelenő piros négyzetek pontos helyét a megfelelő sorrendben.

        Space/Kattintás
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ins2
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Most ebből egy pár gyakorlókör fog következni.

        Minél gyorsabban és pontosabban igyekezz válaszolni.
        Összesen két másodperced van válaszolni, utána már nem rögzíti válaszodat a rendszer!

        Készítsd az ujjaidat a megfelelő gombokra
        Szimmetrikus: JOBB gomb
        Nem szimmetrikus: BAL gomb

        SPACE/Katt
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine prac_sym
    CodeComponent code_prac_sym
      Code Type = Both
      Begin Experiment:
        import os
        import random
        from psychopy import core

        # Define the path to the resources folder
        resources_path = 'resources/'
        # Define how many trials I want for the symmetry practice
        pracSymmTrialNumber = 10
        # Define the array for the images to be shown
        selected_images = []
        # Setting total trials, correct answers and countdown text
        total_trials = 0
        correct_answers = 0
        countDownText = ""
        correct_total_text = ""
        # Setting timer for live countdown (2000 ms plus 500 fixation)
        timerPracSym = core.CountdownTimer(2.5)


        # Create the first array for the non-symmetric images
        non_sym_images = []
        for i in range(1, 80):
            image_name = 'nsym' + str(i) + '.JPG'
            image_path = os.path.join(resources_path, image_name)
            non_sym_images.append(image_path)

        # Create the second array for the symmetric images
        sym_images = []
        for i in range(1, 80):
            image_name = 'sym' + str(i) + '.JPG'
            image_path = os.path.join(resources_path, image_name)
            sym_images.append(image_path)


        #creating function that chooses x amount of sym and nsym images

        def select_images(non_sym_images, sym_images, pracSymmTrialNumber):
            if pracSymmTrialNumber % 2 == 0:
                half_trials = int(pracSymmTrialNumber / 2)
                # Select random samples from sym and nsym images
                selected_non_sym_images = random.sample(non_sym_images, half_trials)
                selected_sym_images = random.sample(sym_images, half_trials)
                selected_images = selected_non_sym_images + selected_sym_images

                random.shuffle(selected_images)
            else:
                half_trials = int((pracSymmTrialNumber + 1) / 2)
                #same here
                selected_non_sym_images = random.sample(non_sym_images, half_trials)
                selected_sym_images = random.sample(sym_images, half_trials)
                selected_images = selected_non_sym_images + selected_sym_images
                #but we delete one
                random.shuffle(selected_images)
                selected_images.pop()
            return selected_images

        selected_images = select_images(non_sym_images, sym_images, pracSymmTrialNumber)
      Begin JS Experiment:
        // Define the path to the resources folder
        resources_path = 'resources/';
        // Define how many trials I want for the symmetry practice
        pracSymmTrialNumber = 10;
        // Define the array for the images to be shown
        selected_images = [];
        // Setting total trials, correct answers and countdown text
        total_trials = 0;
        correct_answers = 0;
        countDownText = "";
        correct_total_text = "";
        // Setting timer for live countdown (2000 ms plus 500 fixation)
        timerPracSym = new util.CountdownTimer(2.5);

        // Create the first array for the non-symmetric images
        non_sym_images = [];
        for (let i = 1; i < 80; i++) {
        const image_name = 'nsym' + i + '.JPG';
        const image_path = resources_path + image_name;
        non_sym_images.push(image_path);
        }

        // Create the second array for the symmetric images
        sym_images = [];
        for (let i = 1; i < 80; i++) {
        const image_name = 'sym' + i + '.JPG';
        const image_path = resources_path + image_name;
        sym_images.push(image_path);
        }


        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        while (0 !== currentIndex) {
        randomIndex = Math.floor(Math.random() * currentIndex);
        currentIndex -= 1;
        temporaryValue = array[currentIndex];
        array[currentIndex] = array[randomIndex];
        array[randomIndex] = temporaryValue;
        }
        return array;
        }

        //creating function that chooses x amount of sym and nsym images
        function select_images(non_sym_images, sym_images, pracSymmTrialNumber) {
        if (pracSymmTrialNumber % 2 === 0) {
        const half_trials = Math.floor(pracSymmTrialNumber / 2);
        // Select random samples from sym and nsym images
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        selected_images = selected_non_sym_images.concat(selected_sym_images);
        selected_images.sort(() => Math.random() - 0.5); }
         else {
        const half_trials = Math.floor((pracSymmTrialNumber + 1) / 2);
        //same here
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        //but we delete one
        selected_images = selected_non_sym_images.concat(selected_sym_images);
        selected_images.sort(() => Math.random() - 0.5);
        selected_images.pop();
        }
        return selected_images;
        }
        selected_images = select_images(non_sym_images, sym_images, pracSymmTrialNumber);
      Begin JS Routine:
        timerPracSym.reset();

        picture = selected_images[total_trials];

        image_2.setImage(picture);
        image_3.setImage(picture);

        document.body.style.cursor='none';
      Begin Routine:
        timerPracSym.reset();

        picture = selected_images[total_trials];
      Each Frame:
        if (routineTimer.getTime() = 2.000:
            image_2.opacity = 0
        else:
            image_2.opacity = 1

        countDownText = "%.1f"%(timerPracSym.getTime())
      Each JS Frame:

         if (routineTimer.getTime() > 2.0000) {
         image_2.opacity = 0;
        } else {
         image_2.opacity = 1;
        }

        countDownText = (Math.round(timerPracSym.getTime() * 10) / 10).toFixed(1);
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        countDownText = "";
        remainingTime = timerPracSym.getTime();
        sym_corr = "";
        if (_pj.in_es6(selected_images[total_trials], sym_images)) {
            sym_corr = "right";
        } else {
            sym_corr = "left";
        }
        if ((remainingTime <= 0)) {
            correct_answers += 0;
            maskColor = redMask;
        } else {
            if ((key_resp_6.keys === sym_corr)) {
                correct_answers += 1;
                maskColor = greenMask;
            } else {
                correct_answers += 0;
                maskColor = redMask;
            }
        }
        image_4.setImage(maskColor);
        total_trials += 1;
        correct_total_text = `Helyes válaszok: ${correct_answers} / ${total_trials}`;
      End Routine:
        countDownText = ""


        # Define how much time is remaining
        remainingTime = timerPracSym.getTime()
        # Define if the symmetry answer is correct or not.
        sym_corr = ''

        if selected_images[total_trials] in sym_images:
                sym_corr = "left"
        else:
                sym_corr = "right"


        # If correct choice has been made under 2 seconds, plus one correct answer

        if remainingTime <= 0:
            correct_answers += 0
            maskColor = redMask
        else:
            if (key_resp_6.keys == sym_corr):

                correct_answers += 1
                maskColor = greenMask
            else:
                correct_answers += 0
                maskColor = redMask

        total_trials += 1
        correct_total_text = "Helyes válaszok:\n %d / %d" % (correct_answers, total_trials)
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent image_2
      image [set every frame] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    TextComponent text_sym_nsym_3
      letterHeight = 0.03
      pos = (0.04, -0.30)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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      text:
        NEM SZIMMETRIKUS      SZIMMETRIKUS
        BAL                     JOBB
    TextComponent text_countdown
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every frame] = $countDownText
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    TextComponent text_how_many_correct
      letterHeight = 0.035
      pos = (0.5, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every frame] = $correct_total_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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  Routine prac_sym_g_r
    CodeComponent code_prac_sym_g_r
      Code Type = Both
      Begin Experiment:
        # Define how much time was needid for the symmetry choice
        usedTime = 0


        # Import the green and red mask images
        maskColor = ""
        greenMask = os.path.join(resources_path, '1green.JPG')
        redMask = os.path.join(resources_path, '1red.JPG')
      Begin JS Experiment:
        usedTime = 0
        maskColor = "";
        greenMask = resources_path + "1green.JPG";
        redMask = resources_path + "1red.JPG";
        picture = "";
      End JS Routine:
        psychoJS.experiment.addData("SymmAnswer", sym_corr);
        maskColor = "";

        picture = ""

        document.body.style.cursor='auto';
      End Routine:
        thisExp.addData('SymmAnswer', sym_corr)
        maskColor = ""
    ImageComponent image_3
      image [set every frame] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    ImageComponent image_4
      image [set every frame] = $maskColor
      opacity = 0.7
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine prac_sym_fb
    CodeComponent code_prac_sym_fb
      Code Type = Both
      Begin Experiment:
        accuracyPercent = 0
        prac_sym_loop_nr = 0
        prac_fb = ""
        accuracyText = ""
      Begin JS Experiment:
        accuracyPercent = 0;
        prac_sym_loop_nr = 0;
        prac_fb = "";
        accuracyText = "";
      Begin JS Routine:
        if ((total_trials === 0)) {
            accuracyPercent = 0;
        } else {
            accuracyPercent = ((correct_answers / total_trials) * 100);
        }
        if ((accuracyPercent >= 85)) {
            text_score.color = "#006400";
        } else {
            text_score.color = "#800000";
        }
        accuracyText = (`${accuracyPercent}` + "%");
        if ((prac_sym_loop_nr <= 1)) {
            prac_fb = "A k\u00eds\u00e9rlet sikeres teljes\u00edt\u00e9s\u00e9hez majd legal\u00e1bb 85%-ot kell el\u00e9rned!\n\nHa \u00fajra k\u00edv\u00e1nsz gyakorolni, nyomd meg a BAL vagy a JOBB gombot. \u00d6sszesen háromszor gyakorolhatod ezt a feladatr\u00e9szt.\n\nHa nincs szükséged további a gyakorlásra és a következő részre ugranál, nyomd meg a SPACE billentyűt";
        } else {
            prac_fb = "A k\u00eds\u00e9rlet sikeres teljes\u00edt\u00e9s\u00e9hez majd legal\u00e1bb 85%-ot kell el\u00e9rned!\n\n Elfogytak a gyakorl\u00e1si lehet\u0151s\u00e9geid\nTov\u00e1bb: SPACE";
        }
      Begin Routine:
        if total_trials == 0:
            accuracyPercent = 0
        else:
            accuracyPercent = (correct_answers/ total_trials) * 100

        if accuracyPercent >= 85:
            text_score.color = "#006400"

        else:
            text_score.color = "#800000"

        accuracyText = "%.1f" %(accuracyPercent) + "%"

        if prac_sym_loop_nr <= 1:
            prac_fb = 'A kísérlet sikeres teljesítéséhez majd legalább 85%-ot kell elérned!\n\nHa újra kívánsz gyakorolni, nyomd meg a BAL vagy a JOBB gombot. Összesen kétszer gyakorolhatod ezt a feladatrészt.\n\nHA a következő részre ugranál, nyomd meg a SPACE gombot'
        else:
            prac_fb = 'A kísérlet sikeres teljesítéséhez majd legalább 85%-ot kell elérned!\n\n Elfogytak a gyakorlási lehetőségeid\nTovább: SPACE'
      End JS Routine:
        prac_sym_loop_nr += 1;
        total_trials = 0;
        correct_answers = 0;
        accuracyText = "";
        correct_total_text = "";
        if ((key_resp_7.keys === "space")) {
            trials_prac2.finished = true;
        }

        text_how_many_correct.setText("", true)
      End Routine:
        prac_sym_loop_nr += 1
        total_trials = 0
        correct_answers = 0
        accuracyText = ""
        correct_total_text = ""

        if (key_resp_7.keys == "space"):
            trials_prac2.finished = True
    TextComponent text_6
      letterHeight = 0.05
      pos = (-0.12, 0.25)
      startVal [time (s)] = 0.0
      text = Eredményed: 
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    TextComponent text_score
      letterHeight = 0.05
      pos = (0.12, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $accuracyText
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    TextComponent text_7
      letterHeight = 0.04
      pos = (0, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_fb
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye
    TextComponent text_bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Köszi, hogy részt vettél a kísérletben!

        Amennyiben bármilyen kérdésed, észrevételed van, kérlek jelezd a tájékoztató dokumentumban megosztott elérhetőségek egyikén!

        A kutatás utolsó feladata egy zárókérdőív kitöltése, amely maximum 2 percet vesz igénybe.

        A befejezéshez nyomd meg a SPACE-t
    KeyboardComponent key_resp_bye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_sym_1
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Meg fog jelenni egy kép, amelyről el kell döntened, hogy FÜGGŐLEGESEN szimmetrikus-e.

        Ha szimmetrikus, a billentyűzeten a JOBB gombot kell megnyomnod,
        ha nem szimmetrikus, a BAL gombot.

        SPACE/Katt
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ins_sym_3
    TextComponent text_4
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Az alábbi ábra pedig nem az.
        Nyomd meg a megfelelő gombot.
    ImageComponent image
      image [set every repeat] = resources/example2.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_sym_nsym_2
      letterHeight = 0.03
      pos = (0.04, -0.30)
      startVal [time (s)] = 0.0
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      text:
        NEM SZIMMETRIKUS      SZIMMETRIKUS
        BAL                     JOBB
    KeyboardComponent key_resp_4
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_sym_2
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Az alábbi ábra például függőlegesen szimmetrikus.
        Nyomd meg a megfelelő gombot
    ImageComponent image_sym
      image [set every repeat] = resources/example1.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_sym_nsym
      letterHeight = 0.03
      pos = (0.04, -0.30)
      startVal [time (s)] = 0.0
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      text:
        NEM SZIMMETRIKUS      SZIMMETRIKUS
        BAL                     JOBB
    KeyboardComponent key_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_square_1
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        A piros négyzetek egy 4x4-es négyzetrácsban jelennek majd meg, egymás után. Igyekezz megjegyezni a bemutatott négyzetek helyes sorrendjét!

        Ezután egy üres négyzetrácsban neked meg kell majd jelölnöd a bemutatott négyzetek pontos helyét a megfelelő sorrendben. Ezért kérlek, abban a sorrendben kattints a négyzetrács mezőire, ahogyan szerinted a piros négyzetek megjelentek. Erre bármennyi időd lesz.

        Először alacsony szinten indul a feladat, ám ha többször is sikerül az adott szinten a helyes sorrendet megadnod, egy idő után szintet lépsz. Ilyenkor eggyel több négyzet helyét kell majd megjegyezned! Próbálj meg minél magasabb szintet elérni!

        Most egy pár gyakorlókör fog következni.
        SPACE/Kattintás
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine square_helper
    CodeComponent code_square_helper
      Code Type = Both
      Begin Experiment:
        import random

        #create an array of the square names
        loop_breaker = 0
        corr_square_clicked = 0
        square_names = ["square_" + str(i) for i in range(16)]
        square_names_both = ["square_" + str(i) + "_both" for i in range(16)]

        #create an array of the square names
        square_coordinates = [
            [-0.225, 0.225], [-0.075, 0.225], [0.075, 0.225], [0.225, 0.225],
            [-0.225, 0.075], [-0.075, 0.075], [0.075, 0.075], [0.225, 0.075],
            [-0.225, -0.075], [-0.075, -0.075], [0.075, -0.075], [0.225, -0.075],
            [-0.225, -0.225], [-0.075, -0.225], [0.075, -0.225], [0.225, -0.225]
        ]

        # creating the dicts
        square_dict = dict(zip(square_names, square_coordinates))
        square_dict_both = dict(zip(square_names_both, square_coordinates))

        # here i can give how many sequences I want (and what length)
        prac_loop_lengths = [2, 2, 3, 3, 3, 3, 4, 4, 4, 5, 5, 5, 6, 6, 6, 7, 7, 7, 8, 8, 8, 9, 9, 9, 10, 10, 10, 11, 11, 11, 12, 12, 12]
        # defining how many practice loops there are
        how_many_prac_loops = len(prac_loop_lengths)

        thisloop_item_number = 0
        counter = 0
      Begin JS Experiment:
        // create an array of square names
        loop_breaker = 0;
        square_names = [];
        corr_square_clicked = 0;
        correct_square_counter = 0;
        for (let i = 0; i < 16; i++) {
        square_names.push("square_" + i);
        }
        square_names_both = [];
        for (let i = 0; i < 16; i++) {
        square_names_both.push("square_" + i + "_both");
        }

        // create an array of square coordinates
        let square_coordinates = [
        [-0.225, 0.225], [-0.075, 0.225], [0.075, 0.225], [0.225, 0.225],
        [-0.225, 0.075], [-0.075, 0.075], [0.075, 0.075], [0.225, 0.075],
        [-0.225, -0.075], [-0.075, -0.075], [0.075, -0.075], [0.225, -0.075],
        [-0.225, -0.225], [-0.075, -0.225], [0.075, -0.225], [0.225, -0.225]
        ];

        // creating the dictionaries
        square_dict = {};
        for (let i = 0; i < square_names.length; i++) {
        square_dict[square_names[i]] = square_coordinates[i];
        }
        square_dict_both = {};
        for (let i = 0; i < square_names_both.length; i++) {
        square_dict_both[square_names_both[i]] = square_coordinates[i];
        }

        // specify the length of the practice loops
        prac_loop_lengths = [2, 2, 3, 3, 3, 3, 4, 4, 4, 5, 5, 5, 6, 6, 6, 7, 7, 7, 8, 8, 8, 9, 9, 9, 10, 10, 10, 11, 11, 11, 12, 12, 12];
        // define the number of practice loops
        how_many_prac_loops = prac_loop_lengths.length;

        thisloop_item_number = 0;
        counter = 0;
      Begin JS Routine:
        thisloop_item_number = prac_loop_lengths[counter];

        random_square_names = shuffle(square_names).slice(0, thisloop_item_number);

        i = 0;
        recall_counter = 0;
        corr_square_cliqued = 0;
        correct_square_counter = 0;


        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        while (0 !== currentIndex) {
        randomIndex = Math.floor(Math.random() * currentIndex);
        currentIndex -= 1;
        temporaryValue = array[currentIndex];
        array[currentIndex] = array[randomIndex];
        array[randomIndex] = temporaryValue;
        }
        return array;
        }
      Begin Routine:
        #here i set how many squares I will show to the participant
        thisloop_item_number = prac_loop_lengths[counter]

        #lets get the random squares
        random_square_names = random.sample(square_names, thisloop_item_number)

        #also set a second counter for the square-showing loop
        i = 0
        recall_counter = 0
        corr_square_cliqued = 0
      End JS Routine:
        counter += 1;
      End Routine:
        counter += 1
  Routine square
    CodeComponent code_square
      Code Type = Both
      Begin JS Routine:
        square_name_show = random_square_names[i];
        coordinates = square_dict[square_name_show];
        square_rand.setPos(coordinates);

        document.body.style.cursor='none';
      Begin Routine:
        # set the square position to chosen_square[x]

        # get the x square number

        square_name_show = random_square_names[i]

        coordinates = square_dict[square_name_show]

        square_rand.setPos(coordinates)
      End JS Routine:
        i += 1;
        psychoJS.experiment.addData("squareShown", square_name_show);
        document.body.style.cursor='auto';
      End Routine:
        i += 1

        thisExp.addData('squareShown', square_name_show)
    TextComponent fixation2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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    PolygonComponent square_rand
      fillColor = $[0.804,-1.000,-1.000]
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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  Routine square_rec
    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = Kattints a négyzetekre abban a sorrendben, ahogyan megjelentek!
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    ImageComponent grid2
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
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    MouseComponent mouse
      clickable = square_0, square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9, square_10, square_11, square_12, square_13, square_14, square_15
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent square_0
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_1
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_2
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_3
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_4
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_5
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_6
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_7
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_8
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_9
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_10
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_11
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_12
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_13
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_14
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_15
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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  Routine next_set
    CodeComponent code_next_square_set
      Code Type = Both
      Begin JS Routine:
        result_squares_text = "Eredményed: " + correct_square_counter + " / " + thisloop_item_number;

        if (correct_square_counter === thisloop_item_number) {
        loop_breaker = 0;
        } else {
        loop_breaker++;
        }

        end_prac_text;
        if (counter <= 2) {
        end_prac_text = "Kattints, vagy nyomd meg a SPACE-t a következő gyakorlókörhöz!";
        } else if (counter === 3) {
        end_prac_text = "Szép! Most következzenek az éles körök!\n\nPróbálj meg minél magasabb szintre jutni!\n\nA folytatáshoz kattints, vagy nyomd meg a SPACE-t";
        } else {
        end_prac_text = "SPACE/Katt";
        }
      Begin Routine:
        # Showing the participant how many squares he found from total


        result_squares_text = "Eredményed: %d / %d"%(corr_square_cliqued ,thisloop_item_number)

        # Setting up the counter that breaks the loop if too many mistakes made
        if (corr_square_cliqued == thisloop_item_number):
            loop_breaker = 0
        else:
            loop_breaker += 1

        # Changing text depending on practice part or experiment part
        if (counter <= 2):
            end_prac_text = "Kattints, vagy nyomd meg a SPACE-t a következő gyakorlókörhöz!"
        elif (counter == 3):
            end_prac_text = "Szép! Most következzenek az éles körök!\n\nPróbálj meg minél magasabb szintre jutni!\n\nA folytatáshoz kattints, vagy nyomd meg a SPACE-t "
        else:
            end_prac_text = "SPACE/Katt"
      End JS Routine:
        psychoJS.experiment.addData("number_of_correct_squares_clicked", correct_square_counter);
        psychoJS.experiment.addData("total_squares_clicked", thisloop_item_number);
        if ((loop_breaker === 3)) {
            trials_square_2.finished = true;
        }

        text_end_prac.setText("", true);
      End Routine:
        # If participants makes 3 mistakes in a row, finish this section

        thisExp.addData('number_of_correct_squares_clicked', corr_square_cliqued)
        thisExp.addData('total_squares_clicked', thisloop_item_number)

        if (loop_breaker == 3):
            trials_square_2.finished = True
    TextComponent text_result_squares
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $result_squares_text
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    TextComponent text_end_prac
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $end_prac_text
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine square_level
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
    TextComponent text_level_1
      letterHeight = 0.1
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = SZINT: 
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    TextComponent text_level_2
      letterHeight = 0.1
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $thisloop_item_number
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  Routine square_rec_g_r
    CodeComponent code_square_rec_g_r
      Code Type = Both
      Begin Experiment:
        recall_counter = 0
      Begin JS Experiment:
        recall_counter = 0;
      Begin JS Routine:
        if (((mouse.clicked_name[0] === "square_0") && (random_square_names[recall_counter] === "square_0"))) {
            corr_square_cliqued ++;
            correct_square_counter += 1;
            square_16.fillColor = "#006400";
        } else {
            if (((mouse.clicked_name[0] === "square_1") && (random_square_names[recall_counter] === "square_1"))) {
                corr_square_cliqued ++;
                correct_square_counter += 1;
                square_17.fillColor = "#006400";
            } else {
                if (((mouse.clicked_name[0] === "square_2") && (random_square_names[recall_counter] === "square_2"))) {
                    corr_square_cliqued ++;
                    correct_square_counter += 1;
                    square_18.fillColor = "#006400";
                } else {
                    if (((mouse.clicked_name[0] === "square_3") && (random_square_names[recall_counter] === "square_3"))) {
                        corr_square_cliqued ++;
                        correct_square_counter += 1;
                        square_19.fillColor = "#006400";
                    } else {
                        if (((mouse.clicked_name[0] === "square_4") && (random_square_names[recall_counter] === "square_4"))) {
                            corr_square_cliqued ++;
                            correct_square_counter += 1;
                            square_20.fillColor = "#006400";
                        } else {
                            if (((mouse.clicked_name[0] === "square_5") && (random_square_names[recall_counter] === "square_5"))) {
                                corr_square_cliqued ++;
                                correct_square_counter += 1;
                                square_21.fillColor = "#006400";
                            } else {
                                if (((mouse.clicked_name[0] === "square_6") && (random_square_names[recall_counter] === "square_6"))) {
                                    corr_square_cliqued ++;
                                    correct_square_counter += 1;
                                    square_22.fillColor = "#006400";
                                } else {
                                    if (((mouse.clicked_name[0] === "square_7") && (random_square_names[recall_counter] === "square_7"))) {
                                        corr_square_cliqued ++;
                                        correct_square_counter += 1;
                                        square_23.fillColor = "#006400";
                                    } else {
                                        if (((mouse.clicked_name[0] === "square_8") && (random_square_names[recall_counter] === "square_8"))) {
                                            corr_square_cliqued ++;
                                            correct_square_counter += 1;
                                            square_24.fillColor = "#006400";
                                        } else {
                                            if (((mouse.clicked_name[0] === "square_9") && (random_square_names[recall_counter] === "square_9"))) {
                                                corr_square_cliqued ++;
                                                correct_square_counter += 1;
                                                square_25.fillColor = "#006400";
                                            } else {
                                                if (((mouse.clicked_name[0] === "square_10") && (random_square_names[recall_counter] === "square_10"))) {
                                                    corr_square_cliqued ++;
                                                    correct_square_counter += 1;
                                                    square_26.fillColor = "#006400";
                                                } else {
                                                    if (((mouse.clicked_name[0] === "square_11") && (random_square_names[recall_counter] === "square_11"))) {
                                                        corr_square_cliqued ++;
                                                        correct_square_counter += 1;
                                                        square_27.fillColor = "#006400";
                                                    } else {
                                                        if (((mouse.clicked_name[0] === "square_12") && (random_square_names[recall_counter] === "square_12"))) {
                                                            corr_square_cliqued ++;
                                                            correct_square_counter += 1;
                                                            square_28.fillColor = "#006400";
                                                        } else {
                                                            if (((mouse.clicked_name[0] === "square_13") && (random_square_names[recall_counter] === "square_13"))) {
                                                                corr_square_cliqued ++;
                                                                correct_square_counter += 1;
                                                                square_29.fillColor = "#006400";
                                                            } else {
                                                                if (((mouse.clicked_name[0] === "square_14") && (random_square_names[recall_counter] === "square_14"))) {
                                                                    corr_square_cliqued ++;
                                                                    correct_square_counter += 1;
                                                                    square_30.fillColor = "#006400";
                                                                } else {
                                                                    if (((mouse.clicked_name[0] === "square_15") && (random_square_names[recall_counter] === "square_15"))) {
                                                                        corr_square_cliqued ++;
                                                                        correct_square_counter += 1;
                                                                        square_31.fillColor = "#006400";
                                                                    } else {
                                                                        square_16.fillColor = "#ff0000";
                                                                        square_17.fillColor = "#ff0000";
                                                                        square_18.fillColor = "#ff0000";
                                                                        square_19.fillColor = "#ff0000";
                                                                        square_20.fillColor = "#ff0000";
                                                                        square_21.fillColor = "#ff0000";
                                                                        square_22.fillColor = "#ff0000";
                                                                        square_23.fillColor = "#ff0000";
                                                                        square_24.fillColor = "#ff0000";
                                                                        square_25.fillColor = "#ff0000";
                                                                        square_26.fillColor = "#ff0000";
                                                                        square_27.fillColor = "#ff0000";
                                                                        square_28.fillColor = "#ff0000";
                                                                        square_29.fillColor = "#ff0000";
                                                                        square_30.fillColor = "#ff0000";
                                                                        square_31.fillColor = "#ff0000";
                                                                        if (random_square_names[recall_counter] === "square_0") {
                                                                            square_16.fillColor = "#006400";
                                                                        } else {
                                                                            if (random_square_names[recall_counter] === "square_1") {
                                                                                square_17.fillColor = "#006400";
                                                                            } else {
                                                                                if (random_square_names[recall_counter] === "square_2") {
                                                                                    square_18.fillColor = "#006400";
                                                                                } else {
                                                                                    if (random_square_names[recall_counter] === "square_3") {
                                                                                        square_19.fillColor = "#006400";
                                                                                    } else {
                                                                                        if (random_square_names[recall_counter] === "square_4") {
                                                                                            square_20.fillColor = "#006400";
                                                                                        } else {
                                                                                            if (random_square_names[recall_counter] === "square_5") {
                                                                                                square_21.fillColor = "#006400";
                                                                                            } else {
                                                                                                if (random_square_names[recall_counter] === "square_6") {
                                                                                                    square_22.fillColor = "#006400";
                                                                                                } else {
                                                                                                    if (random_square_names[recall_counter] === "square_7") {
                                                                                                        square_23.fillColor = "#006400";
                                                                                                    } else {
                                                                                                        if (random_square_names[recall_counter] === "square_8") {
                                                                                                            square_24.fillColor = "#006400";
                                                                                                        } else {
                                                                                                            if (random_square_names[recall_counter] === "square_9") {
                                                                                                                square_25.fillColor = "#006400";
                                                                                                            } else {
                                                                                                                if (random_square_names[recall_counter] === "square_10") {
                                                                                                                    square_26.fillColor = "#006400";
                                                                                                                } else {
                                                                                                                    if (random_square_names[recall_counter] === "square_11") {
                                                                                                                        square_27.fillColor = "#006400";
                                                                                                                    } else {
                                                                                                                        if (random_square_names[recall_counter] === "square_12") {
                                                                                                                            square_28.fillColor = "#006400";
                                                                                                                        } else {
                                                                                                                            if (random_square_names[recall_counter] === "square_13") {
                                                                                                                                square_29.fillColor = "#006400";
                                                                                                                            } else {
                                                                                                                                if (random_square_names[recall_counter] === "square_14") {
                                                                                                                                    square_30.fillColor = "#006400";
                                                                                                                                } else {
                                                                                                                                    if (random_square_names[recall_counter] === "square_15") {
                                                                                                                                        square_31.fillColor = "#006400";
                                                                                                                                    }
                                                                                                                                }
                                                                                                                            }
                                                                                                                        }
                                                                                                                    }
                                                                                                                }
                                                                                                            }
                                                                                                        }
                                                                                                    }
                                                                                                }
                                                                                            }
                                                                                        }
                                                                                    }
                                                                                }
                                                                            }
                                                                        }
                                                                    }
                                                                }
                                                            }
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
      Begin Routine:
        if mouse.clicked_name[0] == "square_0" and random_square_names[recall_counter] == "square_0":
            corr_square_cliqued += 1
            square_16.color = "#006400"
        elif mouse.clicked_name[0] == "square_1" and random_square_names[recall_counter] == "square_1":
            corr_square_cliqued += 1
            square_17.color = "#006400"
        elif mouse.clicked_name[0] == "square_2" and random_square_names[recall_counter] == "square_2":
            corr_square_cliqued += 1
            square_18.color = "#006400"
        elif mouse.clicked_name[0] == "square_3" and random_square_names[recall_counter] == "square_3":
            corr_square_cliqued += 1
            square_19.color = "#006400"
        elif mouse.clicked_name[0] == "square_4" and random_square_names[recall_counter] == "square_4":
            corr_square_cliqued += 1
            square_20.color = "#006400"
        elif mouse.clicked_name[0] == "square_5" and random_square_names[recall_counter] == "square_5":
            corr_square_cliqued += 1
            square_21.color = "#006400"
        elif mouse.clicked_name[0] == "square_6" and random_square_names[recall_counter] == "square_6":
            corr_square_cliqued += 1
            square_22.color = "#006400"
        elif mouse.clicked_name[0] == "square_7"and random_square_names[recall_counter] == "square_7":
            corr_square_cliqued += 1
            square_23.color = "#006400"
        elif mouse.clicked_name[0] == "square_8" and random_square_names[recall_counter] == "square_8":
            corr_square_cliqued += 1
            square_24.color = "#006400"
        elif mouse.clicked_name[0] == "square_9" and random_square_names[recall_counter] == "square_9":
            corr_square_cliqued += 1
            square_25.color = "#006400"
        elif mouse.clicked_name[0] == "square_10" and random_square_names[recall_counter] == "square_10":
            corr_square_cliqued += 1
            square_26.color = "#006400"
        elif mouse.clicked_name[0] == "square_11" and random_square_names[recall_counter] == "square_11":
            corr_square_cliqued += 1
            square_27.color = "#006400"
        elif mouse.clicked_name[0] == "square_12" and random_square_names[recall_counter] == "square_12":
            corr_square_cliqued += 1
            square_28.color = "#006400"
        elif mouse.clicked_name[0] == "square_13" and random_square_names[recall_counter] == "square_13":
            corr_square_cliqued += 1
            square_29.color = "#006400"
        elif mouse.clicked_name[0] == "square_14" and random_square_names[recall_counter] == "square_14":
            corr_square_cliqued += 1
            square_30.color = "#006400"
        elif mouse.clicked_name[0] == "square_15" and random_square_names[recall_counter] == "square_15":
            corr_square_cliqued += 1
            square_31.color = "#006400"
        else:
            square_16.color = "#ff0000";
            square_17.color = "#ff0000";
            square_18.color = "#ff0000";
            square_19.color = "#ff0000";
            square_20.color = "#ff0000";
            square_21.color = "#ff0000";
            square_22.color = "#ff0000";
            square_23.color = "#ff0000";
            square_24.color = "#ff0000";
            square_25.color = "#ff0000";
            square_26.color = "#ff0000";
            square_27.color = "#ff0000";
            square_28.color = "#ff0000";
            square_29.color = "#ff0000";
            square_30.color = "#ff0000";
            square_31.color = "#ff0000";
            if mouse.clicked_name[0] == "square_0" and random_square_names[recall_counter] == "square_0":
                square_16.color = "#006400"
            elif mouse.clicked_name[0] == "square_1" and random_square_names[recall_counter] == "square_1":
                square_17.color = "#006400"
            elif mouse.clicked_name[0] == "square_2" and random_square_names[recall_counter] == "square_2":
                square_18.color = "#006400"
            elif mouse.clicked_name[0] == "square_3" and random_square_names[recall_counter] == "square_3":
                square_19.color = "#006400"
            elif mouse.clicked_name[0] == "square_4" and random_square_names[recall_counter] == "square_4":
                square_20.color = "#006400"
            elif mouse.clicked_name[0] == "square_5" and random_square_names[recall_counter] == "square_5":
                square_21.color = "#006400"
            elif mouse.clicked_name[0] == "square_6" and random_square_names[recall_counter] == "square_6":
                square_22.color = "#006400"
            elif mouse.clicked_name[0] == "square_7"and random_square_names[recall_counter] == "square_7":
                square_23.color = "#006400"
            elif mouse.clicked_name[0] == "square_8" and random_square_names[recall_counter] == "square_8":
                square_24.color = "#006400"
            elif mouse.clicked_name[0] == "square_9" and random_square_names[recall_counter] == "square_9":
                square_25.color = "#006400"
            elif mouse.clicked_name[0] == "square_10" and random_square_names[recall_counter] == "square_10":
                square_26.color = "#006400"
            elif mouse.clicked_name[0] == "square_11" and random_square_names[recall_counter] == "square_11":
                square_27.color = "#006400"
            elif mouse.clicked_name[0] == "square_12" and random_square_names[recall_counter] == "square_12":
                square_28.color = "#006400"
            elif mouse.clicked_name[0] == "square_13" and random_square_names[recall_counter] == "square_13":
                square_29.color = "#006400"
            elif mouse.clicked_name[0] == "square_14" and random_square_names[recall_counter] == "square_14":
                square_30.color = "#006400"
            elif mouse.clicked_name[0] == "square_15" and random_square_names[recall_counter] == "square_15":
                square_31.color = "#006400"
      End JS Routine:
        square_16.fillColor = "#ff8080";
        square_17.fillColor = "#ff8080";
        square_18.fillColor = "#ff8080";
        square_19.fillColor = "#ff8080";
        square_20.fillColor = "#ff8080";
        square_21.fillColor = "#ff8080";
        square_22.fillColor = "#ff8080";
        square_23.fillColor = "#ff8080";
        square_24.fillColor = "#ff8080";
        square_25.fillColor = "#ff8080";
        square_26.fillColor = "#ff8080";
        square_27.fillColor = "#ff8080";
        square_28.fillColor = "#ff8080";
        square_29.fillColor = "#ff8080";
        square_30.fillColor = "#ff8080";
        square_31.fillColor = "#ff8080";

        square_16.borderColor = '#ffffff'
        square_17.borderColor = '#ffffff'
        square_18.borderColor = '#ffffff'
        square_19.borderColor = '#ffffff'
        square_20.borderColor = '#ffffff'
        square_21.borderColor = '#ffffff'
        square_22.borderColor = '#ffffff'
        square_23.borderColor = '#ffffff'
        square_24.borderColor = '#ffffff'
        square_25.borderColor = '#ffffff'
        square_26.borderColor = '#ffffff'
        square_27.borderColor = '#ffffff'
        square_28.borderColor = '#ffffff'
        square_29.borderColor = '#ffffff'
        square_30.borderColor = '#ffffff'
        square_31.borderColor = '#ffffff'


        recall_counter += 1;
    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      text = Kattints a négyzetekre abban a sorrendben, ahogyan megjelentek!
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    ImageComponent grid3
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_16
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_17
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_18
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_19
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_20
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_21
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_22
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_23
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_24
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_25
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_26
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_27
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_28
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_29
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_30
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_31
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine ins_square_end
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        square_end_text = "Szép eredmény!\nA legmagasabb szint, amelyre eljutottál: " + thisloop_item_number;

        // Setting all the important variables back to 0
        loop_breaker = 0;
        thisloop_item_number = 0;
        counter = 0;
        i = 0;
        recall_counter = 0;
        corr_square_cliqued = 0;
        random_square_names = [];
      Begin Routine:
        square_end_text = "Szép eredmény!\nA legmagasabb szint, amelyre eljutottál: %d"%(thisloop_item_number)


        # Setting all the important variables back to 0
        loop_breaker = 0
        thisloop_item_number = 0
        counter = 0
        i = 0
        recall_counter = 0
        corr_square_cliqued = 0
        random_square_names = []
    TextComponent text_square_end
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $square_end_text
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    TextComponent text_18
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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      text:
        Most kérünk a következő oldalakon  válaszolj 3 rövid kérdésre.

        SPACE/Katt
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ins_both
    TextComponent text_12
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Most nézzük meg, hogyan fog a négyzetemlékezeti és a szimmetriadöntéses feladat egyszerre kinézni.

        Minden bemutatott piros négyzet után döntened kell egy kép szimetrikusságáról.
        Egyrészt igyekezz megjegyezni, hol jelennek meg a négyzetek, másrészt ne felejtsd el, hogy minden négyzet között helyesen kell döntened 2 másodpercen belül az ábrák függőleges szimmetrikusságáról.

        Nem baj, ha egyszer-egyszer hibázol a szimmetrikus döntési feladatban. Ne felejtsd, a fő cél az, hogy minél hosszabb szekvenciákat jegyezz meg. Viszont figyelj, hogy összesítve 85% fölött maradjon a helyes döntéseid aránya.

        Először lesz egy pár gyakorlókör.
        Készítsd az ujjaidat a BAL és JOBB gombokra.

        SPACE/Katt
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine both_helper
    CodeComponent code_both_helper
      Code Type = Both
      Begin Experiment:
        # setting variables for overall symmetry accuracy
        overall_symm = 0
        overall_symm_corr = 0
      Begin JS Experiment:
        overall_symm = 0;
        overall_symm_corr = 0;
      Begin JS Routine:
        thisloop_item_number = prac_loop_lengths[counter];

        random_square_names = shuffle(square_names_both).slice(0, thisloop_item_number);

        i = 0;
        recall_counter = 0;
        corr_square_cliqued = 0;
        correct_square_counter = 0;

        total_trials = 0;


        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        while (0 !== currentIndex) {
        randomIndex = Math.floor(Math.random() * currentIndex);
        currentIndex -= 1;
        temporaryValue = array[currentIndex];
        array[currentIndex] = array[randomIndex];
        array[randomIndex] = temporaryValue;
        }
        return array;
        }


        //creating function that chooses x amount of sym and nsym images
        function select_images_both(non_sym_images, sym_images, pracSymmTrialNumber) {
        if (pracSymmTrialNumber % 2 === 0) {
        const half_trials = Math.floor(pracSymmTrialNumber / 2);
        // Select random samples from sym and nsym images
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        selected_images_both = selected_non_sym_images.concat(selected_sym_images);
        selected_images_both.sort(() => Math.random() - 0.5); }
         else {
        const half_trials = Math.floor((pracSymmTrialNumber + 1) / 2);
        //same here
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        //but we delete one
        selected_images_both = selected_non_sym_images.concat(selected_sym_images);
        selected_images_both.sort(() => Math.random() - 0.5);
        selected_images_both.pop();
        }
        return selected_images_both;
        }

        selected_images_both = select_images_both(non_sym_images, sym_images, thisloop_item_number);
      Begin Routine:
        #here i set how many squares I will show to the participant
        thisloop_item_number = prac_loop_lengths[counter]

        #lets get the random squares
        random_square_names = random.sample(square_names_both, thisloop_item_number)

        #also set a second counter for the square-showing loop
        i = 0
        recall_counter = 0
        corr_square_cliqued = 0



        #creating function that chooses x amount of sym and nsym images

        def select_images_both(non_sym_images, sym_images, thisloop_item_number):
            if thisloop_item_number % 2 == 0:
                half_trials = int(thisloop_item_number / 2)
                # Select random samples from sym and nsym images
                selected_non_sym_images = random.sample(non_sym_images, half_trials)
                selected_sym_images = random.sample(sym_images, half_trials)
                selected_images_both = selected_non_sym_images + selected_sym_images

                random.shuffle(selected_images)
            else:
                half_trials = int((thisloop_item_number + 1) / 2)
                #same here
                selected_non_sym_images = random.sample(non_sym_images, half_trials)
                selected_sym_images = random.sample(sym_images, half_trials)
                selected_images_both = selected_non_sym_images + selected_sym_images
                #but we delete one
                random.shuffle(selected_images_both)
                selected_images_both.pop()
            return selected_images_both

        selected_images_both = select_images_both(non_sym_images, sym_images, thisloop_item_number)
      End JS Routine:
        counter += 1;
      End Routine:
        counter += 1
  Routine both_level
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
    TextComponent text_both_level_1
      letterHeight = 0.1
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = SZINT: 
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    TextComponent text_both_level_2
      letterHeight = 0.1
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $thisloop_item_number
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  Routine both_square
    CodeComponent code_both_square
      Code Type = Both
      Begin JS Routine:
        square_name_show = random_square_names[i];
        coordinates = square_dict_both[square_name_show];
        square_rand_both.setPos(coordinates);

        document.body.style.cursor='none';
      Begin Routine:
        # set the square position to chosen_square[x]

        # get the x square number

        square_name_show = random_square_names[i]

        coordinates = square_dict_both[square_name_show]

        square_rand_both.setPos(coordinates)
      End JS Routine:
        i += 1;
        psychoJS.experiment.addData("squareShown", square_name_show);
      End Routine:
        i += 1

        thisExp.addData('squareShown', square_name_show)
    TextComponent fixation_both
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid_both
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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    PolygonComponent square_rand_both
      fillColor = $[0.804,-1.000,-1.000]
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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  Routine both_square_rec
    TextComponent text9_both
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = Kattints a négyzetekre abban a sorrendben, ahogyan megjelentek!
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    ImageComponent grid2_both
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
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    MouseComponent mouse_both
      clickable = square_0_both, square_1_both, square_2_both, square_3_both, square_4_both, square_5_both, square_6_both, square_7_both, square_8_both, square_9_both, square_10_both, square_11_both, square_12_both, square_13_both, square_14_both, square_15_both
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent square_0_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_1_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_2_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_3_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_4_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_5_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_6_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_7_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_8_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_9_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_10_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_11_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_12_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_13_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_14_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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    PolygonComponent square_15_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
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  Routine both_square_rec_g_r
    CodeComponent code_square_rec_g_r_both
      Code Type = Both
      Begin JS Routine:
        if (((mouse_both.clicked_name[0] === "square_0_both") && (random_square_names[recall_counter] === "square_0_both"))) {
            corr_square_cliqued ++;
            correct_square_counter += 1;
            square_16_both.fillColor = "#006400";
        } else {
            if (((mouse_both.clicked_name[0] === "square_1_both") && (random_square_names[recall_counter] === "square_1_both"))) {
                corr_square_cliqued ++;
                correct_square_counter += 1;
                square_17_both.fillColor = "#006400";
            } else {
                if (((mouse_both.clicked_name[0] === "square_2_both") && (random_square_names[recall_counter] === "square_2_both"))) {
                    corr_square_cliqued ++;
                    correct_square_counter += 1;
                    square_18_both.fillColor = "#006400";
                } else {
                    if (((mouse_both.clicked_name[0] === "square_3_both") && (random_square_names[recall_counter] === "square_3_both"))) {
                        corr_square_cliqued ++;
                        correct_square_counter += 1;
                        square_19_both.fillColor = "#006400";
                    } else {
                        if (((mouse_both.clicked_name[0] === "square_4_both") && (random_square_names[recall_counter] === "square_4_both"))) {
                            corr_square_cliqued ++;
                            correct_square_counter += 1;
                            square_20_both.fillColor = "#006400";
                        } else {
                            if (((mouse_both.clicked_name[0] === "square_5_both") && (random_square_names[recall_counter] === "square_5_both"))) {
                                corr_square_cliqued ++;
                                correct_square_counter += 1;
                                square_21_both.fillColor = "#006400";
                            } else {
                                if (((mouse_both.clicked_name[0] === "square_6_both") && (random_square_names[recall_counter] === "square_6_both"))) {
                                    corr_square_cliqued ++;
                                    correct_square_counter += 1;
                                    square_22_both.fillColor = "#006400";
                                } else {
                                    if (((mouse_both.clicked_name[0] === "square_7_both") && (random_square_names[recall_counter] === "square_7_both"))) {
                                        corr_square_cliqued ++;
                                        correct_square_counter += 1;
                                        square_23_both.fillColor = "#006400";
                                    } else {
                                        if (((mouse_both.clicked_name[0] === "square_8_both") && (random_square_names[recall_counter] === "square_8_both"))) {
                                            corr_square_cliqued ++;
                                            correct_square_counter += 1;
                                            square_24_both.fillColor = "#006400";
                                        } else {
                                            if (((mouse_both.clicked_name[0] === "square_9_both") && (random_square_names[recall_counter] === "square_9_both"))) {
                                                corr_square_cliqued ++;
                                                correct_square_counter += 1;
                                                square_25_both.fillColor = "#006400";
                                            } else {
                                                if (((mouse_both.clicked_name[0] === "square_10_both") && (random_square_names[recall_counter] === "square_10_both"))) {
                                                    corr_square_cliqued ++;
                                                    correct_square_counter += 1;
                                                    square_26_both.fillColor = "#006400";
                                                } else {
                                                    if (((mouse_both.clicked_name[0] === "square_11_both") && (random_square_names[recall_counter] === "square_11_both"))) {
                                                        corr_square_cliqued ++;
                                                        correct_square_counter += 1;
                                                        square_27_both.fillColor = "#006400";
                                                    } else {
                                                        if (((mouse_both.clicked_name[0] === "square_12_both") && (random_square_names[recall_counter] === "square_12_both"))) {
                                                            corr_square_cliqued ++;
                                                            correct_square_counter += 1;
                                                            square_28_both.fillColor = "#006400";
                                                        } else {
                                                            if (((mouse_both.clicked_name[0] === "square_13_both") && (random_square_names[recall_counter] === "square_13_both"))) {
                                                                corr_square_cliqued ++;
                                                                correct_square_counter += 1;
                                                                square_29_both.fillColor = "#006400";
                                                            } else {
                                                                if (((mouse_both.clicked_name[0] === "square_14_both") && (random_square_names[recall_counter] === "square_14_both"))) {
                                                                    corr_square_cliqued ++;
                                                                    correct_square_counter += 1;
                                                                    square_30_both.fillColor = "#006400";
                                                                } else {
                                                                    if (((mouse_both.clicked_name[0] === "square_15_both") && (random_square_names[recall_counter] === "square_15_both"))) {
                                                                        corr_square_cliqued ++;
                                                                        correct_square_counter += 1;
                                                                        square_31_both.fillColor = "#006400";
                                                                    } else {
                                                                        square_16_both.fillColor = "#ff0000";
                                                                        square_17_both.fillColor = "#ff0000";
                                                                        square_18_both.fillColor = "#ff0000";
                                                                        square_19_both.fillColor = "#ff0000";
                                                                        square_20_both.fillColor = "#ff0000";
                                                                        square_21_both.fillColor = "#ff0000";
                                                                        square_22_both.fillColor = "#ff0000";
                                                                        square_23_both.fillColor = "#ff0000";
                                                                        square_24_both.fillColor = "#ff0000";
                                                                        square_25_both.fillColor = "#ff0000";
                                                                        square_26_both.fillColor = "#ff0000";
                                                                        square_27_both.fillColor = "#ff0000";
                                                                        square_28_both.fillColor = "#ff0000";
                                                                        square_29_both.fillColor = "#ff0000";
                                                                        square_30_both.fillColor = "#ff0000";
                                                                        square_31_both.fillColor = "#ff0000";
                                                                        if (random_square_names[recall_counter] === "square_0_both") {
                                                                            square_16_both.fillColor = "#006400";
                                                                        } else {
                                                                            if (random_square_names[recall_counter] === "square_1_both") {
                                                                                square_17_both.fillColor = "#006400";
                                                                            } else {
                                                                                if (random_square_names[recall_counter] === "square_2_both") {
                                                                                    square_18_both.fillColor = "#006400";
                                                                                } else {
                                                                                    if (random_square_names[recall_counter] === "square_3_both") {
                                                                                        square_19_both.fillColor = "#006400";
                                                                                    } else {
                                                                                        if (random_square_names[recall_counter] === "square_4_both") {
                                                                                            square_20_both.fillColor = "#006400";
                                                                                        } else {
                                                                                            if (random_square_names[recall_counter] === "square_5_both") {
                                                                                                square_21_both.fillColor = "#006400";
                                                                                            } else {
                                                                                                if (random_square_names[recall_counter] === "square_6_both") {
                                                                                                    square_22_both.fillColor = "#006400";
                                                                                                } else {
                                                                                                    if (random_square_names[recall_counter] === "square_7_both") {
                                                                                                        square_23_both.fillColor = "#006400";
                                                                                                    } else {
                                                                                                        if (random_square_names[recall_counter] === "square_8_both") {
                                                                                                            square_24_both.fillColor = "#006400";
                                                                                                        } else {
                                                                                                            if (random_square_names[recall_counter] === "square_9_both") {
                                                                                                                square_25_both.fillColor = "#006400";
                                                                                                            } else {
                                                                                                                if (random_square_names[recall_counter] === "square_10_both") {
                                                                                                                    square_26_both.fillColor = "#006400";
                                                                                                                } else {
                                                                                                                    if (random_square_names[recall_counter] === "square_11_both") {
                                                                                                                        square_27_both.fillColor = "#006400";
                                                                                                                    } else {
                                                                                                                        if (random_square_names[recall_counter] === "square_12_both") {
                                                                                                                            square_28_both.fillColor = "#006400";
                                                                                                                        } else {
                                                                                                                            if (random_square_names[recall_counter] === "square_13_both") {
                                                                                                                                square_29_both.fillColor = "#006400";
                                                                                                                            } else {
                                                                                                                                if (random_square_names[recall_counter] === "square_14_both") {
                                                                                                                                    square_30_both.fillColor = "#006400";
                                                                                                                                } else {
                                                                                                                                    if (random_square_names[recall_counter] === "square_15_both") {
                                                                                                                                        square_31_both.fillColor = "#006400";
                                                                                                                                    }
                                                                                                                                }
                                                                                                                            }
                                                                                                                        }
                                                                                                                    }
                                                                                                                }
                                                                                                            }
                                                                                                        }
                                                                                                    }
                                                                                                }
                                                                                            }
                                                                                        }
                                                                                    }
                                                                                }
                                                                            }
                                                                        }
                                                                    }
                                                                }
                                                            }
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
      Begin Routine:
        if mouse_both.clicked_name[0] == "square_0_both" and random_square_names[recall_counter] == "square_0_both":
            corr_square_cliqued += 1
            square_16_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_1_both" and random_square_names[recall_counter] == "square_1_both":
            corr_square_cliqued += 1
            square_17_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_2_both" and random_square_names[recall_counter] == "square_2_both":
            corr_square_cliqued += 1
            square_18_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_3_both" and random_square_names[recall_counter] == "square_3_both":
            corr_square_cliqued += 1
            square_19_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_4_both" and random_square_names[recall_counter] == "square_4_both":
            corr_square_cliqued += 1
            square_20_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_5_both" and random_square_names[recall_counter] == "square_5_both":
            corr_square_cliqued += 1
            square_21_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_6_both" and random_square_names[recall_counter] == "square_6_both":
            corr_square_cliqued += 1
            square_22_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_7_both"and random_square_names[recall_counter] == "square_7_both":
            corr_square_cliqued += 1
            square_23_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_8_both" and random_square_names[recall_counter] == "square_8_both":
            corr_square_cliqued += 1
            square_24_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_9_both" and random_square_names[recall_counter] == "square_9_both":
            corr_square_cliqued += 1
            square_25_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_10_both" and random_square_names[recall_counter] == "square_10_both":
            corr_square_cliqued += 1
            square_26_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_11_both" and random_square_names[recall_counter] == "square_11_both":
            corr_square_cliqued += 1
            square_27_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_12_both" and random_square_names[recall_counter] == "square_12_both":
            corr_square_cliqued += 1
            square_28_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_13_both" and random_square_names[recall_counter] == "square_13_both":
            corr_square_cliqued += 1
            square_29_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_14_both" and random_square_names[recall_counter] == "square_14_both":
            corr_square_cliqued += 1
            square_30_both.color = "#006400"
        elif mouse_both.clicked_name[0] == "square_15_both" and random_square_names[recall_counter] == "square_15_both":
            corr_square_cliqued += 1
            square_31_both.color = "#006400"
        else:
            for i in range(16):
                exec(f"square_{i+16}_both.color = '#ff0000'")
      End JS Routine:
        square_16_both.fillColor = "#ff8080";
        square_17_both.fillColor  = "#ff8080";
        square_18_both.fillColor = "#ff8080";
        square_19_both.fillColor = "#ff8080";
        square_20_both.fillColor = "#ff8080";
        square_21_both.fillColor = "#ff8080";
        square_22_both.fillColor = "#ff8080";
        square_23_both.fillColor = "#ff8080";
        square_24_both.fillColor = "#ff8080";
        square_25_both.fillColor = "#ff8080";
        square_26_both.fillColor = "#ff8080";
        square_27_both.fillColor = "#ff8080";
        square_28_both.fillColor = "#ff8080";
        square_29_both.fillColor = "#ff8080";
        square_30_both.fillColor = "#ff8080";
        square_31_both.fillColor = "#ff8080";

        square_16_both.borderColor = '#ffffff'
        square_17_both.borderColor = '#ffffff'
        square_18_both.borderColor = '#ffffff'
        square_19_both.borderColor = '#ffffff'
        square_20_both.borderColor = '#ffffff'
        square_21_both.borderColor = '#ffffff'
        square_22_both.borderColor = '#ffffff'
        square_23_both.borderColor = '#ffffff'
        square_24_both.borderColor = '#ffffff'
        square_25_both.borderColor = '#ffffff'
        square_26_both.borderColor = '#ffffff'
        square_27_both.borderColor = '#ffffff'
        square_28_both.borderColor = '#ffffff'
        square_29_both.borderColor = '#ffffff'
        square_30_both.borderColor = '#ffffff'
        square_31_both.borderColor = '#ffffff'


        recall_counter += 1;
    TextComponent text_10_both
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      text = Kattints a négyzetekre abban a sorrendben, ahogyan megjelentek!
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    ImageComponent grid3_both
      image = resources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_16_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_17_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_18_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_19_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_20_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_21_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_22_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_23_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_24_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_25_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_26_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_27_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_28_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_29_both
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_30_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    PolygonComponent square_31_both
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      shape = rectangle
      size = (0.13, 0.13)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine both_next_set
    CodeComponent code_next_square_set_both
      Code Type = Both
      Begin JS Routine:
        result_squares_text = "Eredményed: " + correct_square_counter + " / " + thisloop_item_number;

        if (correct_square_counter === thisloop_item_number) {
        loop_breaker = 0;
        } else {
        loop_breaker++;
        }

        end_prac_text;
        if (counter <= 2) {
        end_prac_text = "Nyomd meg a SPACE-t vagy kattints a következő gyakorlókörhöz!";
        } else if (counter === 3) {
        end_prac_text = "Szép! Most következzenek az éles körök!\n\nPróbálj meg minél magasabb szintre jutni!\n\nSPACE/Katt";
        } else {
        end_prac_text = "SPACE/Katt";
        }
      Begin Routine:
        # Showing the participant how many squares he found from total
        result_squares_text = "Eredményed: %d / %d"%(corr_square_cliqued ,thisloop_item_number)

        # Setting up the counter that breaks the loop if too many mistakes made
        if (corr_square_cliqued == thisloop_item_number):
            loop_breaker = 0
        else:
            loop_breaker += 1

        # Changing text depending on practice part or experiment part
        if (counter <= 2):
            end_prac_text = "Kattints, vagy nyomd meg a SPACE-t a következő gyakorlókörhöz!"
        elif (counter == 3):
            end_prac_text = "Szép! Most következzenek az éles körök!\n\nPróbálj meg minél magasabb szintre jutni!\n\nA folytatáshoz kattints, vagy nyomd meg a SPACE-t vagy kattints egyet "
        else:
            end_prac_text = "SPACE/Katt"
      End JS Routine:
        total_trials = 0;
        correct_answers = 0;
        accuracyText = "";
        correct_total_text = "";
        text_how_many_correct_both.setText("", true)

        psychoJS.experiment.addData("number_of_correct_squares_clicked", correct_square_counter);
        psychoJS.experiment.addData("total_squares_clicked", thisloop_item_number);
        if ((loop_breaker === 3)) {
            trials_both.finished = true;
        }

        text_end_prac_both.setText("", true);
      End Routine:
        total_trials = 0
        correct_answers = 0
        accuracyText = ""
        correct_total_text = ""

        # If participants makes 3 mistakes in a row, finish this section
        if (loop_breaker == 3):
            trials_both.finished = True

        # Export responses of participant
        thisExp.addData('number_of_correct_squares_clicked', corr_square_cliqued)
        thisExp.addData('total_squares_clicked', thisloop_item_number)
    TextComponent text_result_square_both
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $result_squares_text
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    TextComponent text_end_prac_both
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $end_prac_text
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine both_sym
    CodeComponent code_prac_sym_both
      Code Type = Both
      Begin Experiment:
        selected_images_both = []
      Begin JS Experiment:
        selected_images_both = [];
      Begin JS Routine:
        timerPracSym.reset();

        picture = selected_images_both[total_trials];

        image_2_both.setImage(picture);
        image_3_both.setImage(picture);
      Begin Routine:
        timerPracSym.reset()
        picture = selected_images_both[total_trials]
      Each Frame:
        countDownText = "%.1f"%(timerPracSym.getTime())
      Each JS Frame:
         if (routineTimer.getTime() > 2.0000) {
         image_2_both.opacity = 0;
        } else {
         image_2_both.opacity = 1;
        }

        countDownText = (Math.round(timerPracSym.getTime() * 10) / 10).toFixed(1);
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        countDownText = "";
        remainingTime = timerPracSym.getTime();
        sym_corr = "";
        if (_pj.in_es6(selected_images_both[total_trials], sym_images)) {
            sym_corr = "right";
        } else {
            sym_corr = "left";
        }
        if ((remainingTime <= 0)) {
            correct_answers += 0;
            maskColor = "";
            symCorrectText = "HELYTELEN"
        } else {
            if ((key_resp_6_both.keys === sym_corr)) {
                correct_answers += 1;
                overall_symm_corr += 1
                maskColor = "";
                symCorrectText = "HELYES"
            } else {
                correct_answers += 0;
                maskColor = "";
                symCorrectText = "HELYTELEN"
            }
        }
        //image_4_both.setImage(maskColor);
        total_trials += 1;
        overall_symm += 1;
        correct_total_text = `Helyes válaszok: ${correct_answers} / ${total_trials}`;
      End Routine:
        countDownText = ""

        # Define how much time is remaining
        remainingTime = timerPracSym.getTime()

        # Define if the symmetry answer is correct or not.
        sym_corr = ''

        if selected_images_both[total_trials] in sym_images:
                sym_corr = "left"
        else:
                sym_corr = "right"


        # If correct choice has been made under 2 seconds, plus one correct answer

        if remainingTime <= 0:
            correct_answers += 0
            maskColor = redMask
        else:
            if (key_resp_6_both.keys == sym_corr):

                correct_answers += 1
                overall_symm_corr += 1
                maskColor = greenMask
            else:
                correct_answers += 0
                maskColor = redMask

        total_trials += 1
        overall_symm += 1
        correct_total_text = "Helyes válaszok:\n %d / %d" % (correct_answers, total_trials)
    TextComponent fixation_both_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent image_2_both
      image [set every frame] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    TextComponent text_sym_nsym_3_both
      letterHeight = 0.03
      pos = (0.04, -0.30)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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      text:
        NEM SZIMMETRIKUS      SZIMMETRIKUS
        BAL                     JOBB
    TextComponent text_countdown_both
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every frame] = $countDownText
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    TextComponent text_how_many_correct_both
      letterHeight = 0.035
      pos = (0.5, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every frame] = $correct_total_text
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    KeyboardComponent key_resp_6_both
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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  Routine both_sym_g_r
    CodeComponent code_prac_sym_g_r_both
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData("SymmAnswer", sym_corr);
        maskColor = "";
        $symCorrectText = "";

        document.body.style.cursor='auto';
      End Routine:
        thisExp.addData('SymmAnswer', sym_corr)
        maskColor = ""
    ImageComponent image_3_both
      image [set every frame] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent text_corr_sym_or_not
      letterHeight = 0.03
      pos = (0, -0.30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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      text [set every repeat]:
        $symCorrectText
  Routine both_end
    CodeComponent code_both
      Code Type = Both
      Begin JS Routine:
        square_end_text = `Szép eredmény!
        A legmagasabb szint, amelyre eljutottál: ${thisloop_item_number}`
        ;
        overall_accuracy_both = `A szimmetriadöntésekben elért arányod: ${overall_symm_corr} / ${overall_symm}`;
        if ((overall_symm === 0)) {
            accuracyPercent = 0;
        } else {
            accuracyPercent = ((overall_symm_corr / overall_symm) * 100).toFixed(1);
        }


        if ((accuracyPercent >= 85)) {
            text_accuracy_both.color = "#006400";

        } else {
            text_accuracy_both.color = "#800000";

        }
        accuracyText = (`${accuracyPercent}` + "%");
      Begin Routine:
        square_end_text = "Szép eredmény!\nA legmagasabb szint, amelyre eljutottál: %d."%(thisloop_item_number)
        overall_accuracy_both = "A szimmetriadöntésekben elért arányod: %d / %d"%(overall_symm_corr, overall_symm)

        if overall_symm == 0:
            accuracyPercent = 0
        else:
            accuracyPercent = (overall_symm_corr/ overall_symm) * 100

        if accuracyPercent >= 85:
            text_accuracy_both.color = "#006400"
            text_if_less_accuracy = ""

        else:
            text_accuracy_both.color = "#800000"

            text_if_less_accuracy = "A kutatás szempontjából akkor nem számít sikeresnek a kísérlet elvégzése, ha az összesített arány (azaz minden alkalom arányának átlaga) nem éri el a 85%-ot. Ezért ettől még sikeresen teljesítheted a kísérletet, de legközelebb jobban figyel a függőleges döntési feladatra!"

        accuracyText = "%.1f" %(accuracyPercent) + "%"
    TextComponent text_square_end_both
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $square_end_text
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A szimmetriadöntésekben elért arányod:
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    TextComponent text_accuracy_both
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $accuracyText
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    TextComponent text_next_questions
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Kérünk, most újra válaszolj a három kérdésre a skálákra/gombokra kattintva, azonban válaszaid csak a mostani feladatra vonakozzanak.

        SPACE/Katt
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine prac_sym_helper
    CodeComponent code_prac_sym_helper
      Code Type = Both
      Begin JS Routine:
        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        while (0 !== currentIndex) {
        randomIndex = Math.floor(Math.random() * currentIndex);
        currentIndex -= 1;
        temporaryValue = array[currentIndex];
        array[currentIndex] = array[randomIndex];
        array[randomIndex] = temporaryValue;
        }
        return array;
        }

        //creating function that chooses x amount of sym and nsym images
        function select_images(non_sym_images, sym_images, pracSymmTrialNumber) {
        if (pracSymmTrialNumber % 2 === 0) {
        const half_trials = Math.floor(pracSymmTrialNumber / 2);
        // Select random samples from sym and nsym images
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        selected_images = selected_non_sym_images.concat(selected_sym_images);
        selected_images.sort(() => Math.random() - 0.5); }
         else {
        const half_trials = Math.floor((pracSymmTrialNumber + 1) / 2);
        //same here
        let selected_non_sym_images = shuffle(non_sym_images);
            selected_non_sym_images = selected_non_sym_images.slice(0, half_trials);
        let selected_sym_images = shuffle(sym_images);
            selected_sym_images = selected_sym_images.slice(0, half_trials);
        //but we delete one
        selected_images = selected_non_sym_images.concat(selected_sym_images);
        selected_images.sort(() => Math.random() - 0.5);
        selected_images.pop();
        }
        return selected_images;
        }

        total_trials = 0;
        selected_images = select_images(non_sym_images, sym_images, pracSymmTrialNumber);
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  Routine next_part
    TextComponent text_19
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Szuper!
        Most újra egy feladat fog következni, amely nagyon hasonló lesz az előzőhöz.

        Ugyanígy négyzetek fognak megjelenni, és a feladatod továbbra az, hogy minél hosszabb sorrendet megjegyezz.
        Azonban minden bemutatott négyzet között lesz egy döntési feladat is, ahol el kell döntened egy ábráról, hogy szimmetrikus-e függőlegesen.

        Először nézzük meg, hogyan néz ki a döntési feladat.

        SPACE/Katt
    MouseComponent mouse_11
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wlc_0
    TextComponent text_11
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Üdvözlünk! Köszönjük, hogy részt veszel kutatásunkban.

        Kérlek megfelelően nyugodt környezetet és időpontot válassz a feladat elvégzéséhez, hogy ne zavarjon meg közben semmi. A feladatokat megszakítás nélkül, egyetlen részletben végezd el, lehetőleg egérrel.

        A következő oldalakon néhány egyszerű, MÚLT ÉJSZAKAI alvásodra, illetve JELENLEGI hangulatodra vonatkozó kérdés fog megjelenni. Kérlek válaszolj ezekre az Igaz/Nem igaz gombokra kattintva, illetve az 1-10-ig terjedő skálákon a szerinted leginkább Rád illő pontra kattintva.

        A folytatáshoz nyomd meg a SPACE billentyűt vagy kattints!
    MouseComponent mouse_12
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PN_aff_questions
    TextComponent text_21
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        1. Kérlek értékeld jelenlegi éberségedet 1-10-ig terjedő skálán.
        Jelenlegi éberségemre leginkább jellemző, hogy:
    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      labels = "1: Álmos, kába vagyok", "10: Nagyon aktív, éber vagyok"
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_4.rating
      text = SPACE
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_4.rating
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  Routine PN_aff_questions2
    TextComponent text_22
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        2. Kérlek értékeld jelenlegi állapotodat 1-10-ig terjedő skálán.
        Jelenlegi állapotomra leginkább jellemző, hogy:
    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 1
      labels = "1: Teljesen nyugodt, ellazult vagyok", "10: Nagyon izgatott, feszült vagyok"
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_24
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_5.rating
      text = SPACE
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_5.rating
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  Routine PN_aff_questions3
    TextComponent text_25
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        3. Kérlek értékeld jelenlegi hangulatodat 1-10-ig terjedő skálán.
        Jelenlegi hangulatomra leginkább jellemző, hogy:
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = "1: Lehangolt, szomorú, rosszkedvű vagyok", "10: Jókedvű, feldobott, vidám vagyok"
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_26
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider.rating
      text = SPACE
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider.rating
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  Routine MW_questions1
    TextComponent text_27
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        1. Kérlek értékeld figyelmedet, gondolataidat a feladat végrehajtása során 1-10-ig terjedő skálán.

        Értékelés: Az 1-es „a gondolataim teljesen elkalandoztak, képtelen voltam a feladatra koncentrálni” állapotot, míg a 10-es a „végig nagyon fókuszált voltam, csak a feladatara koncentráltam” állapotokat jelenti.

        A feladat során a figyelmemre leginkább jellemző volt, hogy:
    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 1
      labels = "1: Gondolataim teljesen elkalandoztak", "10: Végig nagyon fókuszált voltam"
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_28
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_6.rating
      text = SPACE
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_6.rating
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  Routine MW_questions2
    TextComponent text_20
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        2. Kérjük értékeld a feladat elvégzése során megjelenő gondolataidnak a hangulatát.
        A feladat végrehajtása során gondolataim:
    SliderComponent slider_7
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "1: Teljes mértékben pozitívak voltak", "2: Inkább pozitívak voltak, mint negatívak", "3: Leginkább semlegesek voltak", "4: Inkább negatívak voltak, mint pozitívak", "5: Teljes mértékben negatívak voltak"
      letterHeight = 0.03
      ori = -180
      pos = (-0.25, -0.1)
      size = (0.02, 0.3)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_29
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_7.rating
      text = SPACE
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_7.rating
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  Routine MW_questions3
    TextComponent text_30
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        3. Kérjük értékeld a feladat elvégzése során megjelenő gondolataidnak a tartalmát.
        A feladat végrehajtása során:
    SliderComponent slider_8
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "1: Leginkább a jövő még meg nem történt eseményei jutottak eszembe.", "2: Leginkább a jelen pillanat, helyzet, járt az eszemben.", "3: Leginkább korábbi események, emlékek jutottak eszembe."
      letterHeight = 0.03
      ori = -180
      pos = (-0.35, -0.1)
      size = (0.02, 0.2)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    TextComponent text_31
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_8.rating
      text = SPACE
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_8.rating
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  Routine GSQS1
    TextComponent text_32
      letterHeight = 0.04
      pos = (-0.2, 0.35)
      startVal [time (s)] = 0.0
      text = 1. Az éjjel mélyen aludtam.
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    SliderComponent slider_9
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem igaz"
      letterHeight = 0.03
      pos = (0.4, 0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_33
      letterHeight = 0.04
      pos = (-0.2, 0.175)
      startVal [time (s)] = 0.0
      text = 2. Úgy érzem, rosszul aludtam az éjjel.
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    SliderComponent slider_10
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_34
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = 3. Több mint fél órába telt, amíg este el tudtam aludni.
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    SliderComponent slider_11
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_35
      letterHeight = 0.04
      pos = (-0.2, -0.175)
      startVal [time (s)] = 0.0
      text = 4. Többször is felébredtem az éjjel.
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    SliderComponent slider_12
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_36
      letterHeight = 0.04
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text = 5. Ma reggel fáradtan ébredtem.
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    SliderComponent slider_13
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_13.rating
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    TextComponent text_37
      letterHeight = 0.05
      pos = (0, -0.43)
      startVal [condition] = slider_13.rating
      text = SPACE
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  Routine GSQS2
    TextComponent text_38
      letterHeight = 0.04
      pos = (-0.2, 0.35)
      startVal [time (s)] = 0.0
      text = 6. Úgy érzem, nem aludtam eleget az éjjel.
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    SliderComponent slider_14
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem igaz"
      letterHeight = 0.03
      pos = (0.4, 0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_39
      letterHeight = 0.04
      pos = (-0.2, 0.175)
      startVal [time (s)] = 0.0
      text = 7. Felébredtem az éjszaka közepén.
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    SliderComponent slider_15
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_40
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = 8. Ma reggel kipihenten ébredtem.
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    SliderComponent slider_16
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_41
      letterHeight = 0.04
      pos = (-0.2, -0.175)
      startVal [time (s)] = 0.0
      text = 9. Azt hiszem, csak néhány órát aludtam az éjjel.
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    SliderComponent slider_17
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_42
      letterHeight = 0.04
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text = 10. Azt hiszem, jól aludtam az éjjel.
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    SliderComponent slider_18
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_18.rating
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    TextComponent text_43
      letterHeight = 0.05
      pos = (0, -0.43)
      startVal [condition] = slider_18.rating
      text = SPACE
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  Routine GSQS3
    TextComponent text_44
      letterHeight = 0.04
      pos = (-0.2, 0.35)
      startVal [time (s)] = 0.0
      text = 11. Egy szemhunyásnyit sem aludtam az éjjel.
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    SliderComponent slider_19
      color = 1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem igaz"
      letterHeight = 0.03
      pos = (0.4, 0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_45
      letterHeight = 0.04
      pos = (-0.2, 0.175)
      startVal [time (s)] = 0.0
      text = 12. Tegnap este könnyen elaludtam.
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    SliderComponent slider_20
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_46
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = 13. Amikor éjjel felébredtem, nehezen aludtam vissza.
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    SliderComponent slider_21
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, 0)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_47
      letterHeight = 0.04
      pos = (-0.2, -0.175)
      startVal [time (s)] = 0.0
      text = 14. Egész éjjel ide-oda forgolódtam az ágyban
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    SliderComponent slider_22
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.175)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent text_48
      letterHeight = 0.04
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text = 15. Az éjjel nem alhattam többet 5 óránál.
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    SliderComponent slider_23
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "Igaz", "Nem Igaz"
      letterHeight = 0.03
      pos = (0.4, -0.35)
      size = (0.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_23.rating
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    TextComponent text_49
      letterHeight = 0.05
      pos = (0, -0.43)
      startVal [condition] = slider_23.rating
      text = SPACE
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Flow
  Routine wlc_0
  Routine GSQS1
  Routine GSQS2
  Routine GSQS3
  Routine PN_aff_questions
  Routine PN_aff_questions2
  Routine PN_aff_questions3
  Routine wlc
  Routine ins_square_1
  LoopInitiator trials_square_2 loopType="TrialHandler"
    loopType = sequential
    nReps = how_many_prac_loops
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    Routine square_helper
    Routine square_level
    LoopInitiator trials_square loopType="TrialHandler"
      loopType = sequential
      nReps = thisloop_item_number
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      Routine square
    LoopTerminator trials_square
    LoopInitiator trials_square_rec loopType="TrialHandler"
      loopType = sequential
      nReps = thisloop_item_number
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      Routine square_rec
      Routine square_rec_g_r
    LoopTerminator trials_square_rec
    Routine next_set
  LoopTerminator trials_square_2
  Routine ins_square_end
  Routine MW_questions1
  Routine MW_questions2
  Routine MW_questions3
  Routine next_part
  Routine ins_sym_1
  Routine ins_sym_2
  Routine ins_sym_3
  Routine ins2
  LoopInitiator trials_prac2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine prac_sym_helper
    LoopInitiator trials_prac loopType="TrialHandler"
      loopType = random
      nReps = pracSymmTrialNumber
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      Routine prac_sym
      Routine prac_sym_g_r
    LoopTerminator trials_prac
    Routine prac_sym_fb
  LoopTerminator trials_prac2
  Routine ins_both
  LoopInitiator trials_both loopType="TrialHandler"
    loopType = random
    nReps = how_many_prac_loops
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    Routine both_helper
    Routine both_level
    LoopInitiator trials_both_square loopType="TrialHandler"
      loopType = sequential
      nReps = thisloop_item_number
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      Routine both_square
      Routine both_sym
      Routine both_sym_g_r
    LoopTerminator trials_both_square
    LoopInitiator trials_both_square_rec loopType="TrialHandler"
      loopType = sequential
      nReps = thisloop_item_number
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      Routine both_square_rec
      Routine both_square_rec_g_r
    LoopTerminator trials_both_square_rec
    Routine both_next_set
  LoopTerminator trials_both
  Routine both_end
  Routine MW_questions1
  Routine MW_questions2
  Routine MW_questions3
  Routine bye
